PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mds_builder
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Routines
  Routine trial
    PolygonComponent left
      fillColor [set every repeat] = $left_colors
      lineColor [set every repeat] = $None
      pos = (-0.12, 0)
      shape = rectangle
      size = (0.08, 0.11)
      startVal [time (s)] = 0.0
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    PolygonComponent right
      fillColor [set every repeat] = $right_colors
      lineColor [set every repeat] = $None
      pos = (0.12, 0)
      shape = rectangle
      size = (0.08, 0.11)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9', 'num_10'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine instr
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Rate each pair of colors on a scale from 0 to 6; 0 being identical, 6 being completely different

        There are two versions, one takes about 4 to 5 minutes (press the A key to take the short version) The other takes about 30 minutes (Press the F key to take the long version)

        You can take this as many times as you'd like, but please remember to use the same Participant code and increase the session number if you choose to do multiple

        You may press ESC at any time to exit
    KeyboardComponent key_resp_2
      allowedKeys = 'f', 'a'
      correctAns = $'a'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine assign
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_2.corr >= 1:
            nRange = '0:40'

        else:
            nRange = '0:-1'
  Routine load
Flow
  Routine instr
  Routine assign
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $nRange
    conditionsFile = E:\\Documents\\MDS_Builder\\f_colors.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('left_colors', [0.9853, 0.6957, 0.7834]), ('right_colors', [0.9923, 0.6985, 0.716])]),
      OrderedDict([('left_colors', [0.9853, 0.6957, 0.7834]), ('right_colors', [0.9786, 0.7101, 0.6543])]),
      OrderedDict([('left_colors', [0.9923, 0.6985, 0.716]), ('right_colors', [0.9786, 0.7101, 0.6543])]),
      OrderedDict([('left_colors', [0.9923, 0.6985, 0.716]), ('right_colors', [0.9463, 0.7284, 0.604])]),
      OrderedDict([('left_colors', [0.9786, 0.7101, 0.6543]), ('right_colors', [0.9463, 0.7284, 0.604])]),
      OrderedDict([('left_colors', [0.9786, 0.7101, 0.6543]), ('right_colors', [0.8982, 0.7505, 0.5702])]),
      OrderedDict([('left_colors', [0.9463, 0.7284, 0.604]), ('right_colors', [0.8982, 0.7505, 0.5702])]),
      OrderedDict([('left_colors', [0.9463, 0.7284, 0.604]), ('right_colors', [0.838, 0.7734, 0.5567])]),
      OrderedDict([('left_colors', [0.8982, 0.7505, 0.5702]), ('right_colors', [0.838, 0.7734, 0.5567])]),
      OrderedDict([('left_colors', [0.8982, 0.7505, 0.5702]), ('right_colors', [0.7696, 0.7949, 0.5653])]),
      OrderedDict([('left_colors', [0.838, 0.7734, 0.5567]), ('right_colors', [0.7696, 0.7949, 0.5653])]),
      OrderedDict([('left_colors', [0.838, 0.7734, 0.5567]), ('right_colors', [0.6971, 0.8132, 0.5954])]),
      OrderedDict([('left_colors', [0.7696, 0.7949, 0.5653]), ('right_colors', [0.6971, 0.8132, 0.5954])]),
      OrderedDict([('left_colors', [0.7696, 0.7949, 0.5653]), ('right_colors', [0.6251, 0.8272, 0.6436])]),
      OrderedDict([('left_colors', [0.6971, 0.8132, 0.5954]), ('right_colors', [0.6251, 0.8272, 0.6436])])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
    Routine trial
  LoopTerminator trials
