PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mds_circles
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Routines
  Routine trial
    PolygonComponent left
      fillColor [set every frame] = $left_color
      lineColor [set every frame] = #000000
      lineWidth [set every frame] = 3
      nVertices = 40
      opacity [set every frame] = 1
      ori [set every frame] = 0
      pos [set every frame] = (-0.12, 0)
      shape = regular polygon...
      size [set every frame] = (0.10, 0.10)
      startVal [time (s)] = 0
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    PolygonComponent right
      fillColor [set every frame] = $right_color
      lineColor [set every frame] = #000000
      lineWidth [set every frame] = 3
      nVertices = 40
      opacity [set every frame] = 1
      ori [set every frame] = 0
      pos [set every frame] = (0.12, 0)
      shape = regular polygon...
      size [set every frame] = (0.10, 0.10)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9', 'num_10'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        left_color_sat = list(map(float, left_colors.split(',')))
        right_color_sat = list(map(float, right_colors.split(',')))

        left_color = left_color_sat
        right_color = right_color_sat
      Each Frame:
        if (frameN % 120) <= 60:
            left_color = left_color_sat
            right_color = right_color_sat
        elif (frameN % 120) > 60:
            left_color = right_color = [0, 0, 0]
  Routine instr
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Rate each pair of colors on a scale from 1 to 5; 1 being most similar, 5 being most different


        You may press ESC at any time to exit

        Press the spacebar when you are ready to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine assign
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_2.corr >= 1:
            nRange = '0:39'

        else:
            nRange = '0:379'
  Routine load
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        left_color_sat = left_colors.split(',').map(x=>+x);
        right_color_sat = right_colors.split(',').map(x=>+x);
      Begin Routine:
        left_color_sat = list(map(float, left_colors.split(',')))
        right_color_sat = list(map(float, right_colors.split(',')))
Flow
  Routine instr
  LoopInitiator iterations loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = f_colors.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('left_colors', '0.9853,0.6957,0.7834'), ('right_colors', '0.9923,0.6985,0.716')]),
        OrderedDict([('left_colors', '0.9853,0.6957,0.7834'), ('right_colors', '0.9786,0.7101,0.6543')]),
        OrderedDict([('left_colors', '0.9923,0.6985,0.716'), ('right_colors', '0.9786,0.7101,0.6543')]),
        OrderedDict([('left_colors', '0.9923,0.6985,0.716'), ('right_colors', '0.9463,0.7284,0.604')]),
        OrderedDict([('left_colors', '0.9786,0.7101,0.6543'), ('right_colors', '0.9463,0.7284,0.604')]),
        OrderedDict([('left_colors', '0.9786,0.7101,0.6543'), ('right_colors', '0.8982,0.7505,0.5702')]),
        OrderedDict([('left_colors', '0.9463,0.7284,0.604'), ('right_colors', '0.8982,0.7505,0.5702')]),
        OrderedDict([('left_colors', '0.9463,0.7284,0.604'), ('right_colors', '0.838,0.7734,0.5567')]),
        OrderedDict([('left_colors', '0.8982,0.7505,0.5702'), ('right_colors', '0.838,0.7734,0.5567')]),
        OrderedDict([('left_colors', '0.8982,0.7505,0.5702'), ('right_colors', '0.7696,0.7949,0.5653')]),
        OrderedDict([('left_colors', '0.838,0.7734,0.5567'), ('right_colors', '0.7696,0.7949,0.5653')]),
        OrderedDict([('left_colors', '0.838,0.7734,0.5567'), ('right_colors', '0.6971,0.8132,0.5954')]),
        OrderedDict([('left_colors', '0.7696,0.7949,0.5653'), ('right_colors', '0.6971,0.8132,0.5954')]),
        OrderedDict([('left_colors', '0.7696,0.7949,0.5653'), ('right_colors', '0.6251,0.8272,0.6436')]),
        OrderedDict([('left_colors', '0.6971,0.8132,0.5954'), ('right_colors', '0.6251,0.8272,0.6436')])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
      Routine trial
    LoopTerminator trials
  LoopTerminator iterations
